PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = tutorial 6
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $" GBP "  +  str(reward_today) + " today " + " or" + " GBP "  +  str(future_reward) + " after "  +  str (delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = tut_6.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 0, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 81, 'future_reward': 85, 'delay': 59},
      {'reward_today': 82, 'future_reward': 90, 'delay': 56},
      {'reward_today': 84, 'future_reward': 95, 'delay': 102},
      {'reward_today': 84, 'future_reward': 100, 'delay': 189},
      {'reward_today': 84, 'future_reward': 105, 'delay': 58},
      {'reward_today': 88, 'future_reward': 110, 'delay': 165},
      {'reward_today': 88, 'future_reward': 115, 'delay': 122},
      {'reward_today': 90, 'future_reward': 120, 'delay': 102},
      {'reward_today': 92, 'future_reward': 125, 'delay': 116},
      {'reward_today': 95, 'future_reward': 130, 'delay': 130},
      {'reward_today': 100, 'future_reward': 135, 'delay': 63},
      {'reward_today': 101, 'future_reward': 140, 'delay': 60},
      {'reward_today': 103, 'future_reward': 145, 'delay': 22},
      {'reward_today': 103, 'future_reward': 150, 'delay': 176},
      {'reward_today': 104, 'future_reward': 155, 'delay': 187},
      {'reward_today': 106, 'future_reward': 160, 'delay': 38},
      {'reward_today': 106, 'future_reward': 165, 'delay': 189},
      {'reward_today': 108, 'future_reward': 170, 'delay': 180},
      {'reward_today': 108, 'future_reward': 175, 'delay': 50},
      {'reward_today': 108, 'future_reward': 180, 'delay': 86}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
    Routine trial
  LoopTerminator trials
